# Macro file for the visualization setting in the initialization phase 
# of the B3 example when running in interactive mode
#

# Use these open statements to open selected visualization
#
# Use this open statement to create an OpenGL view:
/vis/open OGLSQt
#/vis/open OGLI
#
# Use this open statement to create an OpenInventor view:
#/vis/open OIX
#
# Use this open statement to create a .prim file suitable for
# viewing in DAWN:
#/vis/open DAWNFILE
#
# Use this open statement to create a .heprep file suitable for
# viewing in HepRApp:
#/vis/open HepRepFile
#
# Use this open statement to create a .wrl file suitable for
# viewing in a VRML viewer:
#/vis/open VRML2FILE
#
# Disable auto refresh and quieten vis messages whilst scene and
# trajectories are established:
/vis/viewer/set/autoRefresh true
/vis/verbose errors
#
# Draw geometry:
/vis/drawVolume
/vis/viewer/set/background ! ! ! 0.
#
# Specify view angle:
/vis/viewer/set/viewpointThetaPhi 90. 180.
#
# Specify zoom value:
/vis/viewer/zoom 1.5
#
# Specify style (surface, wireframe, auxiliary edges,...)
#/vis/viewer/set/style wireframe
#/vis/viewer/set/auxiliaryEdge true
#/vis/viewer/set/lineSegmentsPerCircle 100
#
# Draw coordinate axes:
/vis/scene/add/axes 0 0 0 167.5 cm
#
# Draw smooth trajectories at end of event, showing trajectory points
# as markers 2 pixels wide:
/vis/scene/add/trajectories smooth
/vis/modeling/trajectories/create/drawByCharge
/vis/modeling/trajectories/drawByCharge-0/default/setDrawStepPts true
/vis/modeling/trajectories/drawByCharge-0/default/setStepPtsSize 2
# (if too many tracks cause core dump => /tracking/storeTrajectory 0)
#
# Draw hits at end of event:
/vis/scene/add/trajectories smooth rich
#/vis/scene/add/trajectories rich
/vis/scene/add/hits
#
# To draw only gammas:
#/vis/filtering/trajectories/create/particleFilter
#/vis/filtering/trajectories/particleFilter-0/add e+
#/vis/filtering/trajectories/particleFilter-0/add neutron
#/vis/filtering/trajectories/particleFilter-0/add proton
#
# To invert the above, drawing all particles except gammas,
# keep the above two lines but also add:
#/vis/filtering/trajectories/particleFilter-0/invert true
#
# Many other options are available with /vis/modeling and /vis/filtering.
# For example, to select colour by particle ID:
/vis/modeling/trajectories/create/drawByParticleID
/vis/modeling/trajectories/drawByParticleID-0/default/setDrawStepPts true
#/vis/modeling/trajectories/drawByParticleID-0/default/setStepPtsSize 1
# To select or override default colours (note: e+ is blue by default):
#/vis/modeling/trajectories/list
#/vis/modeling/trajectories/drawByParticleID-0/set e+ yellow
#
# To superimpose all of the events from a given run:
/vis/scene/endOfEventAction accumulate
#
# Re-establish auto refreshing and verbosity:
/vis/viewer/set/autoRefresh true
/vis/verbose warnings
#
#/vis/reviewKeptEvents
/vis/scene/endOfEventAction accumulate 1000
# For file-based drivers, use this to create an empty detector view:
#/vis/viewer/flush


/gate/verbose Physic    1
/gate/verbose Cuts      1
/gate/verbose SD        0
/gate/verbose Actions   0
/gate/verbose Actor     0
/gate/verbose Step      0
/gate/verbose Error     1
/gate/verbose Warning   1
/gate/verbose Output    0
/gate/verbose Beam      0
/gate/verbose Volume    0
/gate/verbose Image     0
/gate/verbose Geometry  2
/gate/verbose Core      1
